PsychoPy2experiment version="1.81.00"
Settings
  Data filename = 'data/%s_%s' %(expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'Mano( D/S)': u'', u'Et\xe0': u'', u'Genere (M/F)': u''}
  Save csv file = True
  expName = main
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine instruction_1
    CodeComponent code_1
    TextComponent text_1
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        $cs.getInstructions(
           'instruction-1.txt'
        )
    KeyboardComponent key_response_1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent space_bar2
      color = yellow
      pos = [0, -0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        $cs.getInstructions(
           'space-key.txt'
        )
  Routine instruction_2
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        $cs.getInstructions(
           'instruction-2.txt'
        )
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Begin Routine:
        cs.setStoriesFromResponse()
    TextComponent space_bar3
      color = yellow
      pos = [0, -0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        $cs.getInstructions(
           'space-key.txt'
        )
  Routine pause
    TextComponent text_pause
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        $cs.getInstructions(
           'pause.txt'
        )
    KeyboardComponent key_pause
      forceEndRoutine = True
      allowedKeys = 'p'
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_end
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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      text:
        $cs.getInstructions(
           'end.txt'
        )
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'p'
      startVal [time (s)] = 0.0
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  Routine argument_2
    TextComponent text_4
      text [set every repeat] = $sentence
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent missing_word2
      color = yellow
      pos = [0, -0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        $cs.getInstructions(
           'missing-word.txt'
        )
  Routine target_word
    TextComponent text_5
      color = red
      text [set every repeat] = $missingTW
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine fixation_point
    TextComponent text_3
      color = red
      text [set every repeat] = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine argument
    TextComponent argument_1
      text [set every repeat] = $sentence
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent missing_word
      color = yellow
      pos = [0, -0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        $cs.getInstructions(
           'missing-word.txt'
        )
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
  Routine response_2
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.11
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      text:
        $cs.getInstructions(
           'question2.txt'
        )
    KeyboardComponent key_2
      forceEndRoutine = True
      allowedKeys = '1','0'
      startVal [time (s)] = 0.0
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    TextComponent text_6
      color = yellow
      pos = [0, -0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        $cs.getInstructions(
           'si-no.txt'
        )
  Routine response_1
    TextComponent response1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $cs.getInstructions(
           'question1.txt'
        )
    KeyboardComponent key_1
      correctAns = $record_answer()
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1', '0'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Experiment:
        def record_answer():
            cs.record_answer(uid, context, key_1.keys)
    TextComponent text_7
      color = yellow
      pos = [0, -0.25]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text [set every repeat]:
        "[1] <-- " + $targetWordP + "    " + $targetWordN + " --> [0]"
  Routine welocome
    CodeComponent code_3
      Begin Experiment:
        win.colorSpace = 'rgb255'  # changes colorSpace but not
                                   # the value of win.color
        win.color = [0, 0, 0]    # clear blue in rgb255

        import utils.CreateStimuli as CS
        cs = CS.CreateStimuli()
    TextComponent welcome
      startVal [time (s)] = 0.0
      letterHeight = 0.09
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      text:
        $cs.getInstructions(
           'welcome.txt'
        )
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent space_bar
      color = yellow
      pos = [0, -0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        $cs.getInstructions(
           'space-key.txt'
        )
Flow
  Routine welocome
  Routine instruction_1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/stories1.out.csv
    loopType = sequential
    nReps = 1
    Selected rows = 0:3
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    conditions:
      [{'targetWordP': u'APPETITOSO', 'sentenceBlock': u'PB', 'context': u'P', 'contextId': 1, 'gender': u'F', 'sentence': u'Maria adora la cucina italiana. Sua madre ha preparato un piatto di spaghetti al sugo per cena. Maria dice : \u201c\xc8 cos\xec ________\u201d ', 'targetWordN': u'DISGUSTOSO', 'mark': False},
      {'targetWordP': u'APPETITOSO', 'sentenceBlock': u'PB', 'context': u'N', 'contextId': 1, 'gender': u'F', 'sentence': u'Maria odia la cucina a base di pesce. Sua madre ha preparato del salmone norvegese per cena. Maria dice : \u201c\xc8 cos\xec ________\u201d ', 'targetWordN': u'DISGUSTOSO', 'mark': False}]
    Routine fixation_point
    Routine argument
    Routine response_1
  LoopTerminator trials
  Routine pause
  Routine instruction_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = data/stories2.out.csv
    loopType = sequential
    nReps = 1
    Selected rows = 0:8
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    conditions:
      [{'targetWordP': u'SPIGLIATA', 'sentenceBlock': u'PB', 'uid': 4, 'context': u'P', 'contextId': 2, 'gender': u'M', 'sentence': u'Giuseppe e Elisabetta sono andati a ballare. Elisabetta ha fatto 6 piroette. Giuseppe dice: \u201cSei cos\xec _________\u201d', 'targetWordN': u'IMBRANATA', 'mark': u'SPIGLIATA'},
      {'targetWordP': u'APPETITOSO', 'sentenceBlock': u'PB', 'uid': 1, 'context': u'N', 'contextId': 1, 'gender': u'F', 'sentence': u'Maria odia la cucina a base di pesce. Sua madre ha preparato del salmone norvegese per cena. Maria dice : \u201c\xc8 cos\xec ________\u201d ', 'targetWordN': u'DISGUSTOSO', 'mark': u'APPETITOSO'},
      {'targetWordP': u'POSITIVO', 'sentenceBlock': u'T', 'uid': 17, 'context': u'N', 'contextId': 10, 'gender': u'F', 'sentence': u'Maria e Francesco parlano del loro futuro. Francesco \xe8 convinto che tutto andr\xe0 male. Maria dice: \u201cSei cos\xec _________\u201d', 'targetWordN': u'NEGATIVO', 'mark': u'POSITIVO'},
      {'targetWordP': u'PIACEVOLE', 'sentenceBlock': u'T', 'uid': 15, 'context': u'N', 'contextId': 9, 'gender': u'M', 'sentence': u'Federica e Giuseppe sono andati al cinema. Il film era noioso e triste. Giuseppe dice: \u201cEra cos\xec _________\u201d', 'targetWordN': u'TERRIBILE', 'mark': u'PIACEVOLE'}]
    Routine fixation_point
    Routine argument_2
    Routine target_word
    Routine response_2
  LoopTerminator trials_2
  Routine end
